\-------------------------------------------------------------------------
\PJR0 Magazine Training
\Version 1.1 (2016-02-17)
\Shaun Khoo (ORCID: 0000-0002-0972-3788)
\-------------------------------------------------------------------------

\Control Constants
^SessionLength = 30        \Session length in minutes
^Timebins = 30            \Number of timebins
^PelletVT = 60            \Variable time for pellets
^MaxPellets = 30        \Maximum number of pellets delivered
^Version = 110            \Program version

\Inputs
^LeftLever = 1
^RightLever = 2
^Magazine = 3

\Outputs
^LeftOut = 1
^RightOut = 2
^Pellet = 3
^LeftLight = 4
^RightLight = 5
^Dipper = 6
^HouseLight = 7
^Shock = 8

\Z-Pulses
^Shutdown = 8

\DATA - TOTALS
DIM A = 3
\A(0) = Pellets delivered
\A(1) = Magazine Entries
\A(2) = Latency to first pellet
\A(3) = Latency to first magazine entry

\DATA - EVENT LOG
DIM B = 50000        \All event times,         subscript H
DIM C = 50000        \All event identities,         subscript H

\DATA - TIMEBINS
DIM D = 1000        \Rewards,             subscript T
DIM E = 1000        \Magazine entries,         subscript T

\DATA - TIMECOURSE
DIM F = 50000        \All rewards,             subscript I
DIM G = 50000        \All magazine entries,         subscript J

\CONTROL VARIABLES - SESSION OPERATION
DIM X = 3
\X(0) = Session Clock
\X(1) = Centisecond Clock
\X(2) = Timebin shifter
\X(3) = Time to reward

\VT LIST - This list will be initialised into a VI schedule
LIST Y = 1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 12, 13, 14, 15, 16,
17, 18, 19, 20, 21, 22, 23, 24, 25, 26, 27, 28, 29, 30

\CONTROL VARIABLES - SESSION PARAMETERS
DIM Z = 4
var_alias Session Length (min) = Z(0)
var_alias No. of Timebins = Z(1)
var_alias Pellet Variable Delivery Schedule = Z(2)
var_alias Maximum Pellets = Z(3)
var_alias Program Version = Z(4)

\DATA MANAGEMENT
DISKVARS = A, B, C, D, E, F, G, Y, Z
DISKOPTIONS = FULLHEADERS
DISKCOLUMNS = 1
Y2KCOMPLIANT

\-------------------------------------------------------------------------
\State Set 1 - Session Control Program

S.S.1,
S1,    \State 1 sets default variable values
    0.01": SET Z(0) = ^SessionLength, Z(1) = ^Timebins, Z(2) = ^PelletVT;
    SET Z(3) = ^MaxPellets, Z(4) = ^Version / 100;

    \Seal all the arrays
    SET B(H+1) = -987.987, C(H+1) = -987.987;
    SET D(T+1) = -987.987, E(T+1) = -987.987;
    SET F(I+1) = -987.987, G(J+1) = -987.987;

    SHOW 1, Session Length (min), Z(0);
    SHOW 2, No. of Timebins, Z(1);
    SHOW 3, Pellet Variable Delivery Schedule, Z(2);
    Show 4, Maximum Pellets, Z(3);
    SHOW 5, Program Version, Z(4) ---> S2

S2,    \State 2 responds to the start command
    #START: CLEAR 1, 5; SHOW 1, Session Time, X(0);
    ON ^Houselight; SET F(0) = Z(0) * 60, G(0) = Z(0) * 60 ---> S3

S3,    \State 3 is the session clock
    1": ADD X(0); SHOW 1, Session Time, X(0);
    IF X(0) / 60 >= Z(0) [@TRUE, @FALSE]
        @TRUE: Z^Shutdown; SET A(2) = F(0), A(3) = G(0) ---> S4
        @FALSE: ---> SX

S4,    \State 4 ends the program
    1": ---> STOPABORTFLUSH

\-------------------------------------------------------------------------
\State Set 2 - Centisecond clocks

S.S.2,
S1,    \State 1 responds to the start command
    #START: ---> S2

S2,    \State 2 times 1 centisecond increments, timebin shifting
    0.01": SET X(1) = X(1) + 0.01, X(2) = X(2) + 0.01;
    IF (X(2) / 60 >= Z(0) / Z(1)) AND (T + 1 < Z(1)) [@SHIFT, @STAY]
        @SHIFT: SET X(2) = 0; ADD T;
            SET D(T) = 0, E(T) = 0;
            SET D(T+1) = -987.987, E(T+1) = -987.987 ---> SX
        @STAY: ---> SX

    #Z^Shutdown: ---> S1

\-------------------------------------------------------------------------
\State Set 3 - Magazine Entries

S.S.3,
S1,    \State 1 response to the start command
    #START: SHOW 3, Magazine Entries, A(1) ---> S2

S2,    \State 2 counts magazine entries
    #R^Magazine: ADD A(1), E(T); SET B(H) = X(1), C(H) = 5;
    SET G(J) = X(1); ADD H, J; SET B(H) = -987.987, C(H) = -987.987;
    SET G(J) = -987.987; SHOW 3, Magazine Entries, A(1) ---> SX

    #Z^Shutdown: ---> S3

S3,    \State 3 is a holding state
    #START: ---> SX

\-------------------------------------------------------------------------
\State Set 4 - Pellet dispenser

S.S.4,
S1,    \State 1 responds to the start command, establishing schedule
    #START: INITCONSTPROBARR Y, Z(2);
    RANDD X(3) = Y; SET X(3) = X(3) * 1" - 0.5";
    SHOW 2, Pellets Delivered, A(0) ---> S2

S2,    \State 2 waits to deliver a pellet
    X(3)#T: IF A(0) < Z(3) [@ALLOW, @STOP]
        @ALLOW: ON ^Pellet; ADD A(0), D(T); SET B(H) = X(1), C(H) = 3;
        SET F(I) = X(1); ADD H, I; SET B(H) = -987.987, C(H) = -987.987;
        SET F(I) = -987.987; SHOW 2, Pellets Delivered, A(0) ---> S3
        @STOP: ---> S4

    #Z^Shutdown: ---> S4

S3,    \State 3 switches off the pellet dispenser and resets the time
    0.5": OFF ^Pellet; RANDD X(3) = Y; SET X(3) = X(3) * 1" - 0.5" ---> S2

    #Z^Shutdown: OFF ^Pellet ---> S4
S4,    \State 4 is a holding state
    #START: ---> SX

\-------------------------------------------------------------------------
\State Set 5 - Screen refresher

S.S.5,
S1,    \State 1 refreshes the screen with control variables
    1.5": SHOW 1, Session Length (min), Z(0);
    SHOW 2, No. of Timebins, Z(1);
    SHOW 3, Pellet Variable Delivery Schedule, Z(2);
    Show 4, Maximum Pellets, Z(3);
    SHOW 5, Program Version, Z(4);
    IF S.S.1 > 2 [@MISS, @STAY]
        @MISS: ---> S2
        @STAY: ---> SX

    #START: ---> S2

S2,    \State 2 is a holding state
    #START: ---> SX

\-------------------------------------------------------------------------
\Changelog
\Version 1.1 (2016-04-15): Added locked on fan when the program loads
